PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = #A19C99
  colorSpace = hex
  expName = mbah_test
  logging level = debug
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Routines
  Routine movement
    MovieComponent movie_left_trial
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $image_left
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
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    MovieComponent movie_right_trial
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $image_right
      pos [set every repeat] = (0.4, 0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Movement
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  Routine static
    ImageComponent image_left_trial
      image [set every repeat] = $image_left
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_right_trial
      image [set every repeat] = $image_right
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Static
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image_left', '../stim/square_low_complexity_static_c1.png'), ('image_right', '../stim/square_low_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/square_low_complexity_static_c3.png'), ('image_right', '../stim/square_low_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_low_complexity_static_c1.png'), ('image_right', '../stim/circle_low_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/circle_low_complexity_static_c3.png'), ('image_right', '../stim/circle_low_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/square_high_complexity_static_c1.png'), ('image_right', '../stim/square_high_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/square_high_complexity_static_c3.png'), ('image_right', '../stim/square_high_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_static_c1.png'), ('image_right', '../stim/circle_high_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_static_c3.png'), ('image_right', '../stim/circle_high_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_movement_c1.mp4'), ('image_right', '../stim/circle_high_complexity_movement_c1.mp4')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_movement_c1.mp4'), ('image_right', '../stim/circle_high_complexity_movement_c1.mp4')])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
    Routine static
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 8:16
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image_left', '../stim/square_low_complexity_static_c1.png'), ('image_right', '../stim/square_low_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/square_low_complexity_static_c3.png'), ('image_right', '../stim/square_low_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_low_complexity_static_c1.png'), ('image_right', '../stim/circle_low_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/circle_low_complexity_static_c3.png'), ('image_right', '../stim/circle_low_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/square_high_complexity_static_c1.png'), ('image_right', '../stim/square_high_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/square_high_complexity_static_c3.png'), ('image_right', '../stim/square_high_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_static_c1.png'), ('image_right', '../stim/circle_high_complexity_static_c2.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_static_c3.png'), ('image_right', '../stim/circle_high_complexity_static_c4.png')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_movement_c1.mp4'), ('image_right', '../stim/circle_high_complexity_movement_c1.mp4')]),
      OrderedDict([('image_left', '../stim/circle_high_complexity_movement_c1.mp4'), ('image_right', '../stim/circle_high_complexity_movement_c1.mp4')])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
    Routine movement
  LoopTerminator trials_2
